PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Estimulo_ICE_clean
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    ImageComponent image
      image [set every repeat] = $imagem
      interpolate = nearest
      pos [set every repeat] = (px1, py1)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = cm
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    ImageComponent image_2
      image [set every repeat] = $imagem
      interpolate = nearest
      pos [set every repeat] = (px2, py2)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = cm
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    PolygonComponent polygon
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = -1.0000, 1.0000, -0.0039
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    CodeComponent codigo_key
      Code Type = Py
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      Begin Routine:
        loop_start_time = core.getTime()  # Registra o tempo do início da repetição

        # Inicializa variável local pra tecla
        tecla_pressionada = ''
      Each Frame:
        # Captura teclas a cada frame
        theseKeys = event.getKeys(keyList=['up', 'right'], timeStamped=globalClock)

        if theseKeys:
            # Pega só a primeira tecla pra registrar
            tecla_pressionada = theseKeys[0][0]
      End Routine:
        # Salva a coluna 'tecla_final' no .csv oficial
        thisExp.addData('tecla_final', tecla_pressionada)
    KeyboardComponent key_resp_1
      allowedKeys = 'left','right','up', 'down'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      store = all keys
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  Routine trial_2
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    ImageComponent image_3
      image [set every repeat] = $imagem
      interpolate = nearest
      pos [set every repeat] = (px3, py3)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = cm
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    ImageComponent image_4
      image [set every repeat] = $imagem
      interpolate = nearest
      pos [set every repeat] = (px4,py4)
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      units = cm
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    PolygonComponent polygon_2
      fillColor = -1.0000, 1.0000, -0.0039
      lineColor = -1.0000, 1.0000, -0.0039
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
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    CodeComponent codigo_key_2
      Code Type = Py
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      Begin Routine:
        loop_start_time = core.getTime()  # Registra o tempo do início da repetição


        # Inicializa variável local pra tecla
        tecla_pressionada = ''
      Each Frame:
        # Captura teclas a cada frame
        theseKeys = event.getKeys(keyList=['up', 'right'], timeStamped=globalClock)

        if theseKeys:
            # Pega só a primeira tecla pra registrar
            tecla_pressionada = theseKeys[0][0]
      End Routine:
        # Salva a coluna 'tecla_final' no .csv oficial
        thisExp.addData('tecla_final', tecla_pressionada)
    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','up', 'down'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      store = all keys
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  Routine _intertrial_interval_
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    PolygonComponent polygon_5
      fillColor = red
      lineColor = red
      shape = circle
      size = (0.005, 0.005)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine codigo
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    CodeComponent code
      Code Type = Py
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      End Routine:
        # === Junta as respostas ===
        resposta1 = key_resp_1.keys
        resposta2 = key_resp_2.keys

        # Define lógica de fusão
        if resposta1:
            resposta_final = resposta1
        elif resposta2:
            resposta_final = resposta2
        else:
            resposta_final = 'None'

        # Adiciona uma nova coluna chamada 'resposta_fundida'
        thisExp.addData('Respostas', resposta_final)
  Routine FeedBack
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    KeyboardComponent key_resp
      allowedKeys = 'up','right'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine Input
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    CodeComponent code_9
      Code Type = Auto->JS
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      Before Experiment:
        import csv
        import os
        from psychopy import event
      Begin Routine:
        tecla_inicial = ''
      Each Frame:
        keys = event.getKeys()

        for key in keys:
            if key == 'return':
                continueRoutine = False
            elif key == 'backspace':
                tecla_inicial = tecla_inicial[:-1]
            elif len(key) == 1:
                tecla_inicial += key
      End Routine:
        thisExp.addData('tecla_inicial', tecla_inicial)
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      pos = (0, 0.05)
      size = (1, 1)
      startVal [time (s)] = 0.0
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      text:
        Durante o experimento fixe sua visão no ponto vermelho no centro da tela e indique a direção que os itens estão se movendo usando o teclado.


        Para começar o experimento digite quantas repetições vão ser.
    ImageComponent image_16
      anchor = bottom-right
      draggable = True
      image = Logo.png
      pos = (0.6, -0.45)
      size = (0.6,0.15)
      startVal [time (s)] = 0
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  Routine amostrador
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    ImageComponent image_14
      disabled = True
      image = capy.jpg
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent text
      letterHeight = 0.05
      pos = (1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $tecla_inicial
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    TextComponent text_2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = $tecla_inicial
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  Routine show
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    ImageComponent image_15
      anchor = bottom-right
      draggable = True
      image = Logo.png
      pos = (0.6, -0.45)
      size = (0.6,0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $tecla_inicial
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    TextComponent text_4
      letterHeight = 0.05
      pos = (-0.11, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = Vão ser 
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0.14, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = repetições
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  Routine clean
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    CodeComponent Remove_notes
      Code Type = Auto->JS
  Routine Get_Key_Geral
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    KeyboardComponent key_resp_geral
      allowedKeys = 'up','down','left','right'
      disabled = True
      discard previous = False
      forceEndRoutine = False
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  Routine codigo_loop
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    CodeComponent codigo_loop_2
      Code Type = Auto->JS
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      Each Frame:
        if key_resp_2.keys == 'right' or key_resp_3.keys == 'right' or key_resp_4.keys == 'right' or key_resp_5.keys == 'right' or key_resp_6.keys == 'right' or key_resp_7.keys == 'right':  # key_resp_2 para o Estímulo 1
            print('right')

        if LoopName == 'Estimulo_1':
            rep1 = 1
            nomeLoop = 'loop_1'
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_2':
            rep1 = 0
            rep2 = 1
            nomeLoop = 'loop_2'
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_3':
            rep1 = 0
            rep2 = 0
            rep3 = 1
            nomeLoop = 'loop_3'
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_4':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 1
            nomeLoop = 'loop_4'
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_5':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 1
            nomeLoop = 'loop_5'
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0



        elif LoopName == 'Estimulo_6':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 1
            nomeLoop = 'loop_6'
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_7':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 1
            nomeLoop = 'loop_7'
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_8':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 1
            nomeLoop = 'loop_8'
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_9':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 1
            nomeLoop = 'loop_9'
            rep10 = 0
            rep11 = 0
            rep12 = 0


        elif LoopName == 'Estimulo_10':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 1
            nomeLoop = 'loop_10'
            rep11 = 0
            rep12 = 0



        elif LoopName == 'Estimulo_11':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 1
            nomeLoop = 'loop_11'
            rep12 = 0


        elif LoopName == 'Estimulo_12':
            rep1 = 0
            rep2 = 0
            rep3 = 0
            rep4 = 0
            rep5 = 0
            rep6 = 0
            rep7 = 0
            rep8 = 0
            rep9 = 0
            rep10 = 0
            rep11 = 0
            rep12 = 1
            nomeLoop = 'loop_12'
  Routine Key_resp
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right','up', 'down'
      forceEndRoutine = False
      registerOn = release
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      store = all keys
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Flow
  Routine Input
  Routine show
  LoopInitiator MainLoop loopType="TrialHandler"
    conditionsFile = Estimulos.csv
    loopType = random
    nReps = tecla_inicial
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    conditions:
      [OrderedDict([('LoopName', 'Estimulo_1'), ('Arquivo', 'variaveis1.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_2'), ('Arquivo', 'variaveis2.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_3'), ('Arquivo', 'variaveis3.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_4'), ('Arquivo', 'variaveis4.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_5'), ('Arquivo', 'variaveis5.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_6'), ('Arquivo', 'variaveis6.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_7'), ('Arquivo', 'variaveis7.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_8'), ('Arquivo', 'variaveis8.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_9'), ('Arquivo', 'variaveis9.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_10'), ('Arquivo', 'variaveis10.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_11'), ('Arquivo', 'variaveis11.xlsx')]),
      OrderedDict([('LoopName', 'Estimulo_12'), ('Arquivo', 'variaveis12.xlsx')])]
    LoopInitiator loop_1 loopType="TrialHandler"
      conditionsFile = $Arquivo
      loopType = sequential
      nReps = 1
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      conditions:
        [{'px1': 4.4, 'px2': -4.4, 'px3': 4.4, 'px4': -4.4, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.3, 'px2': -4.3, 'px3': 4.3, 'px4': -4.3, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.2, 'px2': -4.2, 'px3': 4.2, 'px4': -4.2, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4.1, 'px2': -4.1, 'px3': 4.1, 'px4': -4.1, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 4, 'px2': -4, 'px3': 4, 'px4': -4, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.9, 'px2': -3.9, 'px3': 3.9, 'px4': -3.9, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.8, 'px2': -3.8, 'px3': 3.8, 'px4': -3.8, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.7, 'px2': -3.7, 'px3': 3.7, 'px4': -3.7, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.6, 'px2': -3.6, 'px3': 3.6, 'px4': -3.6, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.5, 'px2': -3.5, 'px3': 3.5, 'px4': -3.5, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.39999999999999, 'px2': -3.39999999999999, 'px3': 3.39999999999999, 'px4': -3.39999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.29999999999999, 'px2': -3.29999999999999, 'px3': 3.29999999999999, 'px4': -3.29999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2},
        {'px1': 3.19999999999999, 'px2': -3.19999999999999, 'px3': 3.19999999999999, 'px4': -3.19999999999999, 'py1': 2.2, 'py2': -2.2, 'py3': -2.2, 'py4': 2.2}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
      Routine trial
      Routine trial_2
      Routine codigo
    LoopTerminator loop_1
    Routine _intertrial_interval_
  LoopTerminator MainLoop
  Routine clean
